# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/zgpg"
;zgpg
;avance-version (12/01/11)
;1D sequence with power-gated decoupling
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"d11=30m"


"DELTA=d1-100m"
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"acqt0=-p1*2/3.1416"


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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  d11 pl12:f2
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2 MCWRK  * 2 do:f2
LBLF0, MCWRK 
  MCREST
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  10u pl13:f2
  d11 cpd2:f2
  DELTA
  4u do:f2
  10u pl12:f2
  100m cpd2:f2
  p1 ph1
  go=2 ph31
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  MCWRK do:f2 pl13:f2 wr #0
  MCWRK zd
  lo to LBLF0 times td0

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exit
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ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl13: f2 channel - power level for second CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
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;$Id: zgpg,v 1.12 2012/01/31 17:49:32 ber Exp $
