# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/hsqcphpr"
;hsqcphpr
;avance-version (12/01/11)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive
;with decoupling during acquisition
;
;G. Bodenhausen & D.J. Ruben, Chem. Phys. Lett. 69, 185 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p2=p1*2"
"p4=p3*2"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"d13=4u"


"d0=3u"
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"in0=inf1/2"


"DELTA=d0*2+p2"
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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d11 - d11"
"MCWRK = 1.000000*d11"

    dccorr
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1 ze 
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval6 = (ph1loop % 4) * 90"
      MCWRK ip6 + phval6
      "phval9 = (ph1loop % 4) * 90"
      MCWRK ip9 + phval9
      "phval29 = (ph1loop % 4) * 90"
      MCWRK ip29 + phval29
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  d11 pl12:f2
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2 MCWRK do:f2
  MCREST
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3 d12 pl9:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d4 pl2:f2
  (center (p2 ph2) (p4 ph9):f2 )
  d4
  (p1 ph3) 
  (p3 ph6):f2
  d0
  (p2 ph8)
  d0
  (p4 ph7):f2
  DELTA
  (p3 ph7):f2
  (p1 ph4) 
  d4
  (center (p2 ph2) (p4 ph5):f2 )
  d4 pl12:f2
  go=2 ph31 cpd2:f2 
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  MCWRK  do:f2 wr #0 if #0 zd
  MCWRK rf #0
  lo to LBLAV times tdav
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exit 
  

ph1=0
ph2=0
ph3=1
ph4=1
ph5=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph6=0 2
ph7=0 0 0 0 2 2 2 2
ph8=0 0 2 2
ph9=0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph29=0
ph31=0 2 0 2 2 0 2 0

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;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


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;$Id: hsqcphpr,v 1.6 2012/01/31 17:49:26 ber Exp $
