# 1 "/opt/topspin3.2/exp/stan/nmr/lists/pp/zgpr"
;zgpr
;avance-version (12/01/11)
;1D sequence with f1 presaturation
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"d12=20u"


"acqt0=-p1*2/3.1416"
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define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  p1 ph1
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

  MCWRK
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exit


ph1=0 2 2 0 1 3 3 1
ph29=0
ph31=0 2 2 0 1 3 3 1
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;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                      [20 usec]
;ns: 1 * n, total number of scans: NS * TD0


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;$Id: zgpr,v 1.10.8.1 2012/01/31 17:56:42 ber Exp $
