# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/cosyprqf"
;cosyprqf
;avance-version (12/01/11)
;2D homonuclear shift correlation
;with presaturation during relaxation delay
;
;W.P. Aue, E. Bartholdi, R.R. Ernst, J. Chem. Phys. 64, 2229 (1976)
;K. Nagayama et al., J. Magn. Reson. 40, 321 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"d11=30m"
"d12=20u"
"d13=4u"


"in0=inf1"
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"d0=3u"


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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define list<loopcounter> SPARSELIST = <$NUSLIST>
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter STNCNT
"STNCNT=SPARSELIST.len/1"
"MCREST = d11 - d11"
"MCWRK = 0.250000*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
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2 MCWRK  * 3
LBLSTN, MCWRK
  MCREST
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3 d12 pl9:f1
  d1 cw:f1 ph29
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d0
  p0 ph2
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
      "d0=d0orig + t1loop * in0 "
  lo to LBLSTN times STNCNT
  MCWRK rf #0 SPARSELIST.res
  lo to LBLAV times tdav
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exit
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ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 1 2 3
ph29=0
ph31=0 2 0 2 3 1 3 1 2 0 2 0 1 3 1 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p0 : f1 channel -  20 to 90 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d13: short delay                                    [4 usec]
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 4 * n
;ds: 16
;td1: number of experiments
;FnMODE: QF
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;$Id: cosyprqf,v 1.7 2012/01/31 17:49:22 ber Exp $
